PsychoPy2experiment version="2020.2.10"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = OfficeMonitor
  Save log file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = EmoSexCounterbalanced_fontfix
  logging level = debug
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Routines
  Routine Thanks
    TextComponent Thank
      color = $color_choice
      font = $font_choice
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text = Thank you for your participation!
      wrapWidth = 70
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    KeyboardComponent end
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Welcome
    CodeComponent code_JS
      Code Type = Both
      Begin JS Experiment:
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        win.color = "black"
    CodeComponent code_5
      Code Type = Both
      Before JS Experiment:
        //Function to randomly choose number from array
        function randomChoice(arr) {
          return arr[Math.floor(Math.random() * arr.length)];
        }
        //shuffle function
        function shuffle(array) {
            var currentIndex = array.length,  randomIndex;

            // While there remain elements to shuffle...
            while (currentIndex != 0) {

              // Pick a remaining element...
              randomIndex = Math.floor(Math.random() * currentIndex);
              currentIndex--;

              // And swap it with the current element.
              [array[currentIndex], array[randomIndex]] = [
                array[randomIndex], array[currentIndex]];
            }

            return array;
          }

        //Function to center text on screen (wrap width 70)
        //Only works with monospaced fonts
        function centerfy(string) {
        var parts, max;
        parts = string.split('\n'),
        max = 30;

        parts = parts.map(s => s
            .padStart(s.length + Math.floor((max - s.length) / 2), ' ')
            .padEnd(max, ' ')
        );
        return parts.join('\n')
        }
      Begin Experiment:
        import openpyxl
        import numpy
        import random
        from numpy.random import choice

        win.setColor('white')
        font_choice = 'Menlo'

        #Shuffle correct category(left/right) and write to excel file

        cwd = os.getcwd()

        #Randomize block conditions xl file
        '''
        xlfile_cond = "condBlocks.xlsx"
        path_cond = os.path.join(cwd, xlfile_cond)

        book_cond = openpyxl.load_workbook(filename = path_cond)

        sheet = book_cond.active

        list_to_shuffle_cond = ['social', 'nonsocial']
        random.shuffle(list_to_shuffle_cond)
        list_to_shuffle_cond = list_to_shuffle_cond + list_to_shuffle_cond

        for index, element in enumerate(list_to_shuffle_cond, start=1):
            sheet.cell(row = index + 1, column = 1).value = element

        book_cond.save(filename = "condBlocks.xlsx")
        '''
        #Funktion zur Zentrierung des Textes
        def centerfy(str1):
            str2 = str1.split('\n')
            str3 = ''
            for line in str2:
                str3 = str3 + '\n' + line.center(30)
            return str3



        #Zentrierter Text;
        Welcome_heading = centerfy("Vielen Dank, dass Sie an diesem Experiment teilnehmen!")

        Welcome = centerfy("Sie werden im Folgenden gebeten,\n verschiedene Zahlen zuzuordnen.\n"
        '\n'
        "Sie können dies tun, indem Sie die Pfeiltasten <- oder -> drücken.\n"
        '\n'
        "Ob Sie richtig gewählt haben\n wird Ihnen durch Bilder angezeigt.\n"
        '\n'
        "Wir beginnen mit einigen Probedurchgängen, \n damit Sie das Experiment besser verstehen.\n\n"
        'Drücken Sie eine beliebige Taste, um fortzufahren!')

        instruction = centerfy("Sie werden nun gleich eine Zahl \n im unteren Bereich des Bildschirms sehen."
        '\n\n'
        'Ihre Aufgabe ist es, die Zahl mittels der Pfeiltasten \n entweder A oder B zuzuordnen.'
        '\n\n'
        'Die richtige Zuordnung ist völlig zufällig.\n'
        'Sie müssen also zunächst einfach raten.'
        '\n\n'
        'Zusätzlich werden Sie über der Zahl ein Bild sehen,\n'
        'in diesem Fall ein neutrales Gesicht.'
        '\n\n'
        'Ob Sie richtig gewählt haben, \n wird Ihnen durch eine Veränderung des Bildes angezeigt.'
        '\n\n\n'
        'Versuchen wir es mit einem ersten Durchgang!')

        if choice([True, False]):
            right_cat = "A"
            left_cat = "B"
        else:
            left_cat = "A"
            right_cat = "B"
      Begin JS Experiment:
        var font_choice = 'Helvetica';
        var color_choice = 'white';

        //Centered Text

        if (randomChoice([true, false])) {
            right_cat = "A";
            left_cat = "B";
        } else {
            left_cat = "A";
            right_cat = "B";
        }
        window.Welcome_head = Welcome_head
        window.Welcome_text = Welcome_text
      Begin JS Routine:
        Welcome_head.bold = true;
        Welcome_head.setAlignHoriz('center')
        Welcome_text.setAlignHoriz('center')
        text_3.setAlignHoriz('center')
        text_4.setAlignHoriz('center')
        text.setAlignHoriz('center')
        Allesklartext_2.setAlignHoriz('center')
        Allesklartext.setAlignHoriz('center')
      Begin Routine:
        Welcome_head.bold = True
    TextComponent Welcome_head
      color = $color_choice
      font = $font_choice
      letterHeight = 0.025
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Thank you for participating in this experiment!
      wrapWidth = 70
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    TextComponent Welcome_text
      color = $color_choice
      font = $font_choice
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      wrapWidth = 70
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      text:
        You will be asked to assign different numbers to either A or B.

        You can do this by pressing the <- or -> arrow keys.
        Whether you have chosen correctly will be indicated by pictures.

        We'll start with some trial runs,
        so you can better understand the experiment.


        Press any key to continue!
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine BlockCode
    CodeComponent BlockCode1
      Code Type = Both
      Before JS Experiment:
        var BlockCounter = 0;
        var CycleCounter = 0;
        var TrialCounter = 0;

        function randomUniqueNum(min, max, even, outputCount) {

            let arr = []
            if (even == true){
              for (let i = min; i <= max; i+=2) {
                arr.push(i)
              }
            } else {
              for (let i = min + 1; i <= max; i+=2) {
                arr.push(i)
              }
            }

            let result = [];
            for (let i = 1; i <= outputCount; i++) {
              const randomIndex = Math.floor(Math.random() * arr.length);
              result.push(arr[randomIndex]);
              arr.splice(randomIndex, 1);
            }

            return result;
        }

        //generate random numbers
        var fNeven = randomUniqueNum(10,99, true, 4)
        var fNodd = randomUniqueNum(10,99, false, 4)

        var numbarray = [fNeven, fNodd, fNeven, fNodd]

        //Set up list with correct category (4 per cycle * 4 blocks, randomized)
        var CorrCat = [];

        for (let i = 1; i <= 2; i++) {
            var ABlist = ["A", "A", "B", "B"];
            shuffle(ABlist);
            CorrCat.push(ABlist);
        }

        var fN = numbarray.slice(0,2).flat()

        //Set up dict with correct category for lookup
        var CorrDict = {};
        fN.forEach((key, i) => CorrDict[key] = CorrCat.flat()[i]);
        console.log(CorrDict)
      Begin Experiment:
        #Set up order of Blocks (beginning randomized, then alternating)
        Blocklist = ["social", "nonsocial"]
        random.shuffle(Blocklist)
        Blocklist = Blocklist*2

        #Set up 16 2-digit stimuli, no replacement
        fN = random.sample(range(10, 100), 16)
        numbarray = [fN[0:4],
                     fN[4:8],
                     fN[8:12],
                     fN[12:16]]

        #Set up list with correct category (4 per cycle * 4 blocks, randomized)
        CorrCat = []

        for x in range(4):
            ABlist = ["A", "A", "B", "B"]
            random.shuffle(ABlist)
            CorrCat.append(ABlist)

        #flatten list
        CorrCat_new = [item for sublist in CorrCat for item in sublist]
        #Set up dict with correct category for lookup
        CorrDict = dict(zip(fN, CorrCat_new))
        print("CorrDict:", CorrDict)
      Begin JS Experiment:
        //Set up order of Blocks (beginning randomized, then alternating)
        console.log("Blocklist: " + Blocklist)
        Blocklist = ["social", "nonsocial"];
        console.log("Blocklist: " + Blocklist)
        Blocklist = shuffle(Blocklist)
        console.log("Blocklist: " + Blocklist)
        Blocklist = Blocklist.concat(Blocklist)
        console.log("Blocklist:" + Blocklist)
        console.log("BlockCounter: " + BlockCounter)
        console.log("Blocklist[BlockCounter]:" + Blocklist[BlockCounter])
        console.log("Blocklist[BlockCounter] == 'social':" + Blocklist[BlockCounter] == "social")
        //Set up 16 2-digit stimuli, no replacement
        //Define function unique random numbers
      Begin JS Routine:
        if (Blocklist[BlockCounter] == "social") {
            //trial_file = "trials_social.xlsx";
            filenames_noxl = [  ["Stimuli/neutral/Still.jpg", "Stimuli/social/happy/F01-Happy Women.mp4", "Stimuli/social/angry/F04-Angry Women.mp4"],
                                ["Stimuli/neutral/Still.jpg", "Stimuli/social/happy/M02-Happy Man.mp4", "Stimuli/social/angry/M06-Angry Man.mp4"],
                                ["Stimuli/neutral/Still.jpg", "Stimuli/social/happy/F01-Happy Women.mp4", "Stimuli/social/angry/F04-Angry Women.mp4"],
                                ["Stimuli/neutral/Still.jpg", "Stimuli/social/happy/M02-Happy Man.mp4", "Stimuli/social/angry/M06-Angry Man.mp4"]];
        } else {
            if (Blocklist[BlockCounter] == "nonsocial") {
                //trial_file = "trials_nonsocial.xlsx";
                filenames_noxl = [  ["Stimuli/neutral/Still.jpg", "Stimuli/nonsocial/Right Tick.mp4", "Stimuli/nonsocial/Wrong Tick.mp4"],
                                    ["Stimuli/neutral/Still.jpg", "Stimuli/nonsocial/Right Tick.mp4", "Stimuli/nonsocial/Wrong Tick.mp4"],
                                    ["Stimuli/neutral/Still.jpg", "Stimuli/nonsocial/Right Tick.mp4", "Stimuli/nonsocial/Wrong Tick.mp4"],
                                    ["Stimuli/neutral/Still.jpg", "Stimuli/nonsocial/Right Tick.mp4", "Stimuli/nonsocial/Wrong Tick.mp4"]];
            }
        }

        console.log("filenames_noxl:" + filenames_noxl)
        /*path = os.path.join(cwd, trial_file)
        book = openpyxl.load_workbook(filename = path)
        sheet = book.active

        listAB = ['A', 'B']*2
        random.shuffle(listAB)

        for index, element in enumerate(listAB, start=1):
        sheet.cell(row = index + 1, column = 5).value = element

        filenames = []
        for x in range(4):
        filenames.append([])

        #here you iterate over the rows in the specific column
        for row in range(2,6):
        for column in "BCD":  #Here you can add or reduce the columns
        cell_name = "{}{}".format(column, row)
        filenames[row-2].append(sheet[cell_name].value) # the value of the specific cell

        randnumbers = []
        for x in range(1, 5):
        randnumbers.append(random.randint(9, 99))

        for row in range(2,6):
        for column in "A":  #Here you can add or reduce the columns
        cell_name = "{}{}".format(column, row)
        sheet[cell_name].value = randnumbers[row-2]# the value of the specific cell

        book.save(filename = trial_file)*/
      Begin Routine:
        #Define filenames according to Block
        if Blocklist[blocks.thisRepN]== "social":
            #trial_file = "trials_social.xlsx"
            filenames_noxl = [
                ["ADFES/Freigestellt/Neutral/F01-Neutral-Face Forward_freigestellt.mp4", "ADFES/Freigestellt/Joy/Used/F01-Joy-Face Forward_freigestellt.mp4", "ADFES/Freigestellt/Anger/F01-Anger-Face Forward_freigestellt.mp4"],
                ["ADFES/Freigestellt/Neutral/F04-Neutral-Face Forward_freigestellt.mp4", "ADFES/Freigestellt/Joy/Used/F04-Joy-Face Forward_freigestellt.mp4", "ADFES/Freigestellt/Anger/F04-Anger-Face Forward_freigestellt.mp4"],
                ["ADFES/Freigestellt/Neutral/M06-Neutral-Face Forward_freigestellt.mp4", "ADFES/Freigestellt/Joy/Used/M06-Joy-Face Forward_freigestellt.mp4", "ADFES/Freigestellt/Anger/M06-Anger-Face Forward_freigestellt.mp4"],
                ["ADFES/Freigestellt/Neutral/M02-Neutral-Face Forward_freigestellt.mp4", "ADFES/Freigestellt/Joy/Used/M02-Joy-Face Forward_freigestellt.mp4", "ADFES/Freigestellt/Anger/M02-Anger-Face Forward_freigestellt.mp4"]
            ]
        elif Blocklist[blocks.thisRepN] == "nonsocial":
            #trial_file = "trials_nonsocial.xlsx"
            filenames_noxl = [
                ["Mandalas_new/neutral/Mandala3_neutral.mp4", "Mandalas_new/happy/Mandala3_happy.mp4", "Mandalas_new/angry/Mandala3_angry.mp4"],
                ["Mandalas_new/neutral/Mandala2_neutral.mp4", "Mandalas_new/happy/Mandala2_happy.mp4", "Mandalas_new/angry/Mandala2_angry.mp4"],
                ["Mandalas_new/neutral/Mandala4_neutral.mp4", "Mandalas_new/happy/Mandala4_happy.mp4", "Mandalas_new/angry/Mandala4_angry.mp4"],
                ["Mandalas_new/neutral/Mandala1_neutral.mp4", "Mandalas_new/happy/Mandala1_happy.mp4", "Mandalas_new/angry/Mandala1_angry.mp4"]
            ]
        #Load Excel file (not relevant anymore)
        '''path = os.path.join(cwd, trial_file)
        book = openpyxl.load_workbook(filename = path)
        sheet = book.active

        listAB = ['A', 'B']*2
        random.shuffle(listAB)

        for index, element in enumerate(listAB, start=1):
            sheet.cell(row = index + 1, column = 5).value = element

        filenames = []
        for x in range(4):
            filenames.append([])

        #here you iterate over the rows in the specific column
        for row in range(2,6):
            for column in "BCD":  #Here you can add or reduce the columns
                cell_name = "{}{}".format(column, row)
                filenames[row-2].append(sheet[cell_name].value) # the value of the specific cell

        randnumbers = []
        for x in range(1, 5):
            randnumbers.append(random.randint(9, 99))

        for row in range(2,6):
            for column in "A":  #Here you can add or reduce the columns
                cell_name = "{}{}".format(column, row)
                sheet[cell_name].value = randnumbers[row-2]# the value of the specific cell

        book.save(filename = trial_file)'''
  Routine LateralizationByCycle
    CodeComponent code_8
      Code Type = Both
      Begin Experiment:
        CycleText = ''
      Begin JS Experiment:
        CycleText = "";
      Begin JS Routine:
        /*function randomChoice(arr) {
          return arr[Math.floor(Math.random() * arr.length)];
        }*/

        if (randomChoice([true, false])) {
            right_cat = "A";
            left_cat = "B";
        } else {
            left_cat = "A";
            right_cat = "B";
        }

        console.log("BlockCounter:" + BlockCounter)
        shuffle(numbarray[BlockCounter]);
        console.log("numbarray[BlockCounter]:", numbarray[BlockCounter]);
        shuffle(filenames_noxl);
        console.log(filenames_noxl);
        console.log("Cycletext for next block cond: ", + ((BlockCounter in [1, 2, 3]) && (CycleCounter == 0)))

        //"blocks:" + BlockCounter.toString()) +
            //", cycles:") + CycleCounter.toString()) + "\nright_cat: ") +
            //right_cat.toString()) + " left_cat: ") +
            //left_cat.toString()) +
        if (((BlockCounter == 0) && (CycleCounter == 0))) {
            CycleText1_dur = undefined
            CycleText2_dur = 0
            CycleText3_dur = 0
            CycleText4_dur = 0
            CycleText = centerfy(
            "\n\nWe are now starting the first block.\n\n" +
            "Everything works exactly as in the training runs." +
            "\n\nIn the first pass you must \n" +
            "guess the assignment with the arrow keys.\n\n" +
            "But try to memorize the correct assignment!\n" +
            "In total, you will see 4 different numbers.\n" +
            "After that, there will be a short pause. \n\n" +
            "Press any key, \n " +
            "to start the first block!\n");
        } else {
            if (([0, 1, 2, 3].includes(BlockCounter)) && (CycleCounter == 1)) {
                CycleText1_dur = 0
                CycleText2_dur = undefined
                CycleText3_dur = 0
                CycleText4_dur = 0
                CycleText = centerfy(
               "You have now seen all the numbers in this block \n" +
                "a first time.\n\nPause for a moment!\n\n" +
                "You will be shown all the numbers again in a moment.\n" +
                "Try to match the numbers correctly.\n\n" +
                "Notice that the pictures and numbers have been recombined.\n" +
                "A and B might also have switched places!\n\n" +
                "Press any key,\n" +
                "to start the next pass.");
            } else {
                if (([0, 1, 2, 3].includes(BlockCounter)) && ([2, 3, 4, 5].includes(CycleCounter))) {
                    CycleText1_dur = 0
                    CycleText2_dur = 0
                    CycleText3_dur = undefined
                    CycleText4_dur = 0
                    CycleText = centerfy(
                    "Very good!\n\n" +
                    "You have completed another pass!\n\n" +
                    "There are still " + (6 - CycleCounter).toString() +
                    " more passes,\n" +
                    "in which you will be shown all the numbers again.\n\n" +
                    "Press any key,\n "+
                    "to start the next run.");
                } else {
                    if (([1, 2, 3].includes(BlockCounter)) && (CycleCounter == 0)) {
                        CycleText1_dur = 0
                        CycleText2_dur = 0
                        CycleText3_dur = 0
                        CycleText4_dur = undefined
                        CycleText = centerfy(
                        "You have now completed a full block.\n\n" +
                        "In the next block you will see different images.\n" +
                        "Instead of fractals you will now see faces.\n" +
                        "(or vice versa).\n\n" +
                        "The principle remains the same.\n\n" +
                        "There are still " + (4- BlockCounter).toString() +
                        " more blocks.\n\n" +
                        "When you are ready \n " +
                        "press any button,\n" +
                        "to start the next block.\n");
                    }
                }
            }
        }
      Begin Routine:
        #randomize lateralization of A and B each cycle
        if choice([True, False]):
            right_cat = "A"
            left_cat = "B"
        else:
            left_cat = "A"
            right_cat = "B"

        #shuffe stimuli per cycle
        random.shuffle(numbarray[blocks.thisRepN])
        print("numbarray[blocks.thisRepN]:", numbarray[blocks.thisRepN])
        #shuffle filenames per cycle
        random.shuffle(filenames_noxl)
        print(filenames_noxl)

        ###IRRELEVANT
        #randomize picture/number association each cycle
        '''
        random.shuffle(filenames)

        for row in range(2,6):
            index = 0
            for column in "BCD":  #Here you can add or reduce the columns
                cell_name = "{}{}".format(column, row)
                sheet[cell_name].value = filenames[row-2][index]# the value of the specific cell
                index += 1

        book.save(filename = trial_file)
        '''

        #Define Text, dependent on Block and Cycle
        if blocks.thisN == 0 and cycles.thisRepN == 0:
            CycleText = centerfy(
            'blocks:' + str(blocks.thisN) + ', cycles:' + str(cycles.thisRepN) + '\n'
            'right_cat: ' + str(right_cat) + ' left_cat: ' + str(left_cat) + '\n\n'
            'Wir beginnen nun mit dem ersten Block.\n\n'
            'Alles funktioniert genau wie in den Trainingsdurchläufen.\n\n'
            'Im ersten Durchgang müssen Sie \n die Zuordnung mit den Pfeiltasten raten.\n\n'
            'Versuchen Sie aber, sich die richtige Zuordnung \n '
            'genau einzuprägen!\n'
            'Insgesamt werden sie 4 verschiedene Zahlen sehen,\n danach gibt es eine kurze Pause.\n\n'
            'Wenn Sie keine Fragen mehr haben, \n drücken Sie eine beliebige Taste, \n um den ersten Block zu starten!\n'
            )
        elif blocks.thisN in [0, 1, 2, 3] and cycles.thisRepN == 1:
            CycleText = centerfy(
            'blocks:' + str(blocks.thisN) + ', cycles:' + str(cycles.thisRepN) + '\n'
            'right_cat: ' + str(right_cat) + ' left_cat: ' + str(left_cat) + '\n\n'
            'Sie haben nun alle Zahlen in diesem Block \n ein erstes Mal gesehen.\n\n'
            'Machen Sie kurz Pause!\n\n'
            'Sie werden gleich erneut alle Zahlen gezeigt bekommen.\n'
            'Versuchen Sie, die Zahlen richtig zuzuordnen.\n\n'
            'Beachten Sie, dass Bilder und Zahlen\n'
            'nun neu kombiniert wurden.\n\n'
            'Drücken Sie eine beliebige Taste,\n'
            'um den nächsten Durchgang zu starten.'
            )
        elif blocks.thisN in [0, 1, 2, 3] and cycles.thisRepN in [2, 3, 4, 5, 6, 7, 8]:
            CycleText = centerfy(
            'blocks:' + str(blocks.thisN) + ', cycles:' + str(cycles.thisRepN) + '\n'
            'right_cat: ' + str(right_cat) + ' left_cat: ' + str(left_cat) + '\n\n'
            'Sehr gut!\n\n'
            'Sie haben einen weiteren Durchgang abgeschlossen!\n\n'
            'Es folgen noch ' + str(cycles.nRemaining + 1) + ' weitere Durchgänge,\n'
            'in denen Sie wieder jeweils alle Zahlen gezeigt bekommen.\n\n'
            'Drücken Sie eine beliebige Taste, \n'
            'um den nächsten Durchgang zu starten.'
            )
        elif blocks.thisN in [1, 2, 3] and cycles.thisRepN == 0:
            CycleText = centerfy(
            'blocks:' + str(blocks.thisN) + ', cycles:' + str(cycles.thisRepN) + '\n'
            'right_cat: ' + str(right_cat) + ' left_cat: ' + str(left_cat) + '\n\n'
            'Sie haben nun einen  vollständigen Block abgeschlossen.\n\n'
            'Im nächsten Block werden andere Bilder angezeigt.\n'
            'Statt Fraktalen werden Sie nun Gesichter sehen\n'
            '(oder umgekehrt).\n\n'
            'Das Prinzip bleibt gleich.\n\n'
            'Es folgen noch ' + str(blocks.nRemaining + 1) + ' weitere Blöcke.\n\n'
            'Wenn Sie bereit sind, \n drücken Sie eine beliebige Taste,\n'
            'um den nächsten Block zu starten.\n'
            )
    TextComponent CycleInfo
      color = black
      disabled = True
      font = $font_choice
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      text [set every repeat] = $CycleText
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    TextComponent CycleText1
      color = $color_choice
      font = $font_choice
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $CycleText1_dur
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      text:
        We are now starting the first block.

        In the first pass you must
        guess the assignment with the arrow keys.
        Try to memorize the correct assignment!

        In total, you will see 4 different numbers.
        After that, there will be a short pause.


        Press any key,
        to start the first block!
    TextComponent CycleText2
      color = $color_choice
      font = $font_choice
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $CycleText2_dur
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      text:
        PAUSE

        Press any key,
        to start the next pass.

        (A and B might have switched places!)
    TextComponent CycleText3
      color = $color_choice
      font = $font_choice
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $CycleText3_dur
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      text [set every repeat]:
        PAUSE

        Press any key, to start the next cycle.
    TextComponent CycleText4
      color = $color_choice
      font = $font_choice
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $CycleText4_dur
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      text:
        You have now completed a full block.

        In the next block you will see different images.

        Instead of checkmarks/crosses you will now see faces (or vice versa).

        The principle remains the same.

        There are 4 blocks in total.

        When you are ready
        press any button,
        to start the next block.
    KeyboardComponent key_resp_6
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Alles_Klar_2
    CodeComponent Allesklarcode_2
      Code Type = Both
      Begin Experiment:
        Allesklar = centerfy('Wie Sie gesehen haben,\n ändert sich das Bild wieder entsprechend Ihrer Antwort.\n\n'
        'Bunte, bewegte Bilder zeigen eine richtige Antwort an,\n bei einer falschen Antwort wird das Bild grau und verschwommen.\n\n'
        'Ganz so einfach wird es aber im richtigen Experiment leider nicht.\n'
        'Sie werden sich nicht immer auf die Bilder verlassen können.\n'
        'Stattdessen bekommen Sie bei einer richtigen Antwort MEISTENS die fröhlichen Gesichter bzw. bunten Fraktale zu sehen. \n'
        'Das heißt, selbst wenn Sie richtig geantwortet haben, \n'
        'kann es manchmal sein, dass Sie trotzdem ein ärgerliches Gesicht bzw. ein graues Fraktal sehen \n'
        'Im nächsten Durchgang wird durch Text angezeigt, ob Sie richtig oder falsch geantwortet haben. \n'
        'Achten Sie darauf, dass Text und Bild meistens, aber nicht immer übereinstimmen.')
    TextComponent Allesklartext_2
      color = $color_choice
      font = $font_choice
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      wrapWidth = 70
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      text:
        As you have seen, the image changes again according to your answer.
        This time, tickmarks indicate a correct answer, while a cross indicates a wrong answer.

        But it won't be quite that simple in the real experiment!
        You will not always be able to rely on the pictures.

        Instead, if you answer correctly, you will
        MOSTLY see the happy faces or tickmarks.

        That is, even if you answered correctly,
        sometimes you may still see a frowning face or a cross.

        In the next pass, text will indicate whether you answered correctly or incorrectly.

        Note that text and image mostly, but not always, match.
    KeyboardComponent Allesklar_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Intertrial_Interval
    TextComponent text_2
      color = $color_choice
      font = $font_choice
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        console.log(TrialCounter);
      Begin Routine:
        print(trials.thisN)
      End JS Routine:
        if(TrialCounter < 3){
        TrialCounter = TrialCounter + 1;
        } else {
            if(TrialCounter == 3) {
                TrialCounter = 0;
                console.log("TrialCounter reset to: " + TrialCounter)
            }
        }
  Routine trial
    CodeComponent code_4
      Code Type = Both
      End JS Routine:
        thisExp.addData("left", left_cat);
        thisExp.addData("right", right_cat);
        thisExp.addData("stim", Stim);
        if ((response_training.keys === "left")) {
            thisExp.addData("ParticipantAnswer", left_cat);
        } else {
            if ((response_training.keys === "right")) {
                thisExp.addData("ParticipantAnswer", right_cat);
            } else {
                if ((response_training.keys === null)) {
                    thisExp.addData("ParticipantAnswer", null);
                }
            }
        }
      End Routine:
        #Speichern von keyangry und keyhappy ins Data file in jedem Trial
        thisExp.addData ('left', left_cat)
        thisExp.addData ('right', right_cat)
        thisExp.addData('stim', Stim)

        if response_training.keys == 'left':
            thisExp.addData('ParticipantAnswer', left_cat)
        elif response_training.keys == 'right':
            thisExp.addData('ParticipantAnswer', right_cat)
        elif response_training.keys == None:
            thisExp.addData('ParticipantAnswer', None)
    TextComponent fix_cross
      color = $color_choice
      font = $font_choice
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text = +
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    ImageComponent neutral_still
      image [set every repeat] = $filename_neutral
      pos = [0, 0.225]
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 6.0
      texture resolution = 512
      units = height
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    MovieComponent new_neutral
      No audio = True
      backend = moviepy
      disabled = True
      forceEndRoutine = True
      movie [set every repeat] = $filename_neutral
      pos = [0, 0.225]
      size = [0.625, 0.5]
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 6
      units = height
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    KeyboardComponent response_training
      allowedKeys = 'left','right'
      correctAns = $CorrCat
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 6
      storeCorrect = True
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    TextComponent Stimulus
      color = $color_choice
      font = $font_choice
      letterHeight = 0.1
      pos = (0, -0.15)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 6
      text [set every repeat] = $str(int(Stim))
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    TextComponent left_disp
      color = grey
      font = $font_choice
      letterHeight = 0.1
      pos = (-0.5, 0)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 6
      text [set every repeat] = $left_cat
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    TextComponent right_disp
      color = grey
      font = $font_choice
      letterHeight = 0.1
      pos = (0.5, 0)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 6
      text [set every repeat] = $right_cat
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  Routine feedback
    CodeComponent code_6
      Code Type = Both
      Begin Experiment:
        #Initialize color
        feedback = ''
        left_color = ''
        right_color = ''
      Begin JS Experiment:
        feedback = "";
        left_color = "";
        right_color = "";
      Begin JS Routine:
        if ((((response_training_2.keys == "left") && (CorrDict[stim_thisN] == left_cat)) || ((response_training_2.keys == "right") && (CorrDict[stim_thisN] == right_cat)))) {
            if(weighted_random([true, false], [0.85, 0.15])){
                //congruent
                thisExp.addData("Congr/Incongr", "Congruent")
                thisExp.addData("Reward", 1)
                console.log("Congruent image!")
                time_h = 6.0;
                time_a = 0.0;
            } else {
                //incongruent
                thisExp.addData("Congr/Incongr", "Incongruent")
                thisExp.addData("Reward", 0)
                console.log("Incongruent image!")
                time_h = 0.0;
                time_a = 6.0;
            }
        } else {
         if(weighted_random([true, false], [0.85, 0.15])){
                //congruent
                console.log("Congruent image!")
                thisExp.addData("Congr/Incongr", "Congruent")
                thisExp.addData("Reward", 0)
                time_h = 0.0;
                time_a = 6.0;
            } else {
                //incongruent
                console.log("Incongruent image!")
                thisExp.addData("Congr/Incongr", "Congruent")
                thisExp.addData("Reward", 1)
                time_h = 6.0;
                time_a = 0.0;
                }
        }
        time_miss = 0;
        if ((response_training_2.keys == "left")) {
            left_color = "white";
            right_color = "grey";
        } else {
            if ((response_training_2.keys == "right")) {
                left_color = "grey";
                right_color = "white";
            } else {
                if ((response_training_2.keys == null)) {
                    left_color = "grey";
                    right_color = "grey";
                    time_miss = 6;
                    time_a = 0;
                    time_h = 0;
                }
            }
        }
      Begin Routine:
        #Feedback Zuweisung
        # to make feedback probabilistic: uncomment nested if clause
        # this will show happy for correct (congruent) in 80% of cases
        # and angry for correct (incongruent) in 20% of cases
        # probability can be changed by manipulating the sequence in p


        #if correct show happy video (with 0.8 probability)
        if (response_training_2.keys == 'left' and CorrDict[stim_thisN] == left_cat) or (response_training_2.keys == 'right' and CorrDict[stim_thisN] == right_cat):
            if choice([True, False], p = [0.8, 0.2]):
                time_h = 6.0
                time_a = 0.0
            else:
                time_h = 0.0
                time_a = 6.0

        #if not correct show angry video (with 0.8 probability)
        else:
            if choice([True, False], p = [0.8, 0.2]):
                time_h = 0.0
                time_a = 6.0
            else:
                time_h = 6.0
                time_a = 0.0

        #Set color of A/B on screen after response
        time_miss = 0
        if response_training_2.keys == 'left':
            left_color = 'black'
            right_color = 'grey'
        elif response_training_2.keys == 'right':
            left_color = 'grey'
            right_color = 'black'
        elif response_training_2.keys == None:
            left_color = 'grey'
            right_color = 'grey'
            time_miss = 6
            time_a = 0
            time_h = 0
      End JS Routine:
        thisExp.addData("CorrCat", CorrDict[stim_thisN])
        thisExp.addData("BlockType", Blocklist[BlockCounter])

        if ((((response_training_2.keys == "left") && (CorrDict[stim_thisN] == left_cat)) || ((response_training_2.keys == "right") && (CorrDict[stim_thisN] == right_cat)))) {
            thisExp.addData("CorrectAns", "Yes");
            console.log("Correct Answer!");
        } else {
            thisExp.addData("CorrectAns", "No");
            console.log("Wrong Answer!");
        }
      End Routine:
        if (response_training_2.keys == 'left' and CorrDict[stim_thisN] == left_cat) or (response_training_2.keys == 'right' and CorrDict[stim_thisN] == right_cat):
            thisExp.addData ('CorrectAns', "Yes")
            print("Correct Answer!")
        else:
            thisExp.addData ('CorrectAns', "No")
            print("Wrong Answer!")
    TextComponent feedback_miss2
      color = $color_choice
      font = $font_choice
      letterHeight = 0.05
      pos = (0, 0.225)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time_miss
      text = PLEASE RESPOND FASTER!
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    MovieComponent new_angry
      No audio = True
      backend = moviepy
      durationEstim = 6
      forceEndRoutine = False
      movie [set every repeat] = $filename_thisN_angry
      pos = [0, 0.225]
      size = [0.5, 0.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time_a
      units = height
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    MovieComponent new_happy
      backend = moviepy
      durationEstim = 6
      forceEndRoutine = False
      movie [set every repeat] = $filename_thisN_happy
      pos = [0, 0.225]
      size = [0.5, 0.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time_h
      units = height
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    TextComponent left_disp_fb
      color [set every repeat] = $left_color
      font = $font_choice
      letterHeight = 0.1
      pos = (-0.5, 0)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
      text [set every repeat] = $left_cat
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    TextComponent right_disp_fb
      color [set every repeat] = $right_color
      font = $font_choice
      letterHeight = 0.1
      pos = (0.5, 0)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
      text [set every repeat] = $right_cat
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    TextComponent Stimulus_fb
      color = $color_choice
      font = $font_choice
      letterHeight = 0.1
      pos = (0, -0.15)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
      text [set every repeat] = $str(int(stim_thisN))
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  Routine Alles_klar
    CodeComponent Allesklarcode
      Code Type = Both
      Begin Experiment:
        Allesklar = centerfy(('Wie Sie gesehen haben\n verändert sich das Bild entsprechend Ihrer Antwort.\n\n'
        'Fröhliche Gesichter zeigen eine richtige Antwort an,\n ärgerliche Gesichter eine Falsche.\n\n'
        'Später sollen Sie versuchen,\n sich die richtige Zuordnung der Zahl genau einzuprägen. \n\n'
        'Bild und Zahl sind einander zufällig zugeordnet\n und werden später neu kombiniert.\n'
        'Sie müssen sich beim Einprägen also auf die Zahl konzentrieren!\n\n'
        'Drücken Sie eine beliebige Taste, um fortzufahren!'))
    TextComponent text_4
      color = $color_choice
      font = $font_choice
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      wrapWidth = 70
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      text:
        As you have seen, the picture changes according to your answer.
        Happy faces indicate a correct answer,
        while angry faces indicate a wrong answer.

        Later on, you should try to remember the correct assignment of the number.

        Press any key to continue!
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_train_ns
    CodeComponent Allesklarcode_3
      Code Type = Both
      Begin Experiment:
        Allesklar = centerfy(('Im nächsten Durchgang werden Sie etwas andere Bilder sehen.\n\n'
        'Das Prinzip bleibt aber gleich:\n'
        ' Das Bild verändert sich entsprechend einer richtigen/falschen Antwort.\n'
        'Probieren wir es aus!'))
    TextComponent text
      color = $color_choice
      font = $font_choice
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      wrapWidth = 70
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      text:
        In the next pass, you will see different pictures.

        But the principle remains the same
        The picture changes according to a correct/wrong answer.

        Let's try it out!
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_train_s
    TextComponent text_3
      color = $color_choice
      font = $font_choice
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      wrapWidth = 70
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      text:
        You are about to see a number at the bottom of the screen.
        Your task is to assign the number to either A or B using the arrow keys.

        The correct assignment is completely random
        so you just have to guess at first.

        Additionally, you will see a picture above the number.
        Whether you have chosen correctly will be indicated by a change in the picture.


        Let's try a first round!
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback_train
    TextComponent feedback_miss
      color = $color_choice
      font = $font_choice
      letterHeight = 0.05
      pos = (0, 0.225)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time_miss
      text = PLEASE RESPOND FASTER!
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    CodeComponent code_9
      Code Type = Both
      Begin JS Routine:
        console.log("CorrCatTrain:", CorrCatTrain)
        console.log("left_cat:", left_cat)
        console.log("CorrCatTrain == left_cat:", CorrCatTrain == left_cat)
        if ((CorrCatTrain == left_cat)) {
            time_h = 6.0;
            time_a = 0.0;
        } else {
            time_h = 0.0;
            time_a = 6.0;
        }
        time_miss = 0;
        if ((response_training.keys == "left")) {
            left_color = "white";
            right_color = "grey";
        } else {
            if ((response_training.keys == "right")) {
                left_color = "grey";
                right_color = "white";
            } else {
                if ((response_training.keys == null)) {
                    left_color = "grey";
                    right_color = "grey";
                    time_miss = 6.0;
                    time_h = 0.0;
                    time_a = 0.0;
                }
            }
        }
      Begin Routine:
        #Feedback Training

        #Show happy/angry in 50% of cases
        if CorrCat == left_cat:
            time_h = 6.0
            time_a = 0.0
        else:
            time_h = 0.0
            time_a = 6.0

        #Set color of A/B on screen after response (and feedback for miss)
        time_miss = 0
        if response_training.keys == 'left':
            left_color = 'black'
            right_color = 'grey'
        elif response_training.keys == 'right':
            left_color = 'grey'
            right_color = 'black'
        elif response_training.keys == None:
            left_color = 'grey'
            right_color = 'grey'
            time_miss = 6.0
            time_h = 0.0
            time_a = 0.0
    MovieComponent new_angry_2
      No audio = True
      backend = moviepy
      durationEstim = 6
      forceEndRoutine = False
      movie [set every repeat] = $filename_feedback_angry
      pos = [0, 0.225]
      size = [0.5, 0.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time_a
      units = height
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    MovieComponent new_happy_2
      backend = moviepy
      durationEstim = 6
      forceEndRoutine = False
      movie [set every repeat] = $filename_feedback_happy
      pos = [0, 0.225]
      size = [0.5, 0.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time_h
      units = height
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    TextComponent left_disp_fb_2
      color [set every repeat] = $left_color
      font = $font_choice
      letterHeight = 0.1
      pos = (-0.5, 0)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
      text [set every repeat] = $left_cat
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    TextComponent right_disp_fb_2
      color [set every repeat] = $right_color
      font = $font_choice
      letterHeight = 0.1
      pos = (0.5, 0)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
      text [set every repeat] = $right_cat
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    TextComponent Stimulus_fb_2
      color = $color_choice
      font = $font_choice
      letterHeight = 0.1
      pos = (0, -0.15)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
      text [set every repeat] = $str(int(Stim))
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  Routine trial_2
    CodeComponent code_7
      Code Type = Both
      Begin JS Routine:
        filename_thisN_neutral = filenames_noxl[TrialCounter][0];
        filename_thisN_happy = filenames_noxl[TrialCounter][1];
        filename_thisN_angry = filenames_noxl[TrialCounter][2];
        stim_thisN = numbarray[BlockCounter][TrialCounter];
        console.log("stim_thisN:", stim_thisN);
        console.log("CorrDict[stim_thisN]:", CorrDict[stim_thisN]);
      Begin Routine:
        filename_thisN_neutral = filenames_noxl[trials.thisRepN][0]
        filename_thisN_happy = filenames_noxl[trials.thisRepN][1]
        filename_thisN_angry = filenames_noxl[trials.thisRepN][2]
        stim_thisN = numbarray[blocks.thisRepN][trials.thisRepN]
        print(stim_thisN)
        print(CorrDict[stim_thisN])
      End JS Routine:
        thisExp.addData("left", left_cat);
        thisExp.addData("right", right_cat);
        thisExp.addData("stim", stim_thisN);
        if ((response_training_2.keys == "left")) {
            thisExp.addData("ParticipantAnswer", left_cat);
        } else {
            if ((response_training_2.keys == "right")) {
                thisExp.addData("ParticipantAnswer", right_cat);
            } else {
                if ((response_training_2.keys == null)) {
                    thisExp.addData("ParticipantAnswer", null);
                }
            }
        }
      End Routine:
        #Speichern von keyangry und keyhappy ins Data file in jedem Trial
        thisExp.addData ('left', left_cat)
        thisExp.addData ('right', right_cat)
        thisExp.addData('stim', stim_thisN)

        if response_training_2.keys == 'left':
            thisExp.addData('ParticipantAnswer', left_cat)
            print("Participant responded with:", left_cat)
        elif response_training_2.keys == 'right':
            thisExp.addData('ParticipantAnswer', right_cat)
            print("Participant responded with:", right_cat)
        elif response_training_2.keys == None:
            thisExp.addData('ParticipantAnswer', None)
            print("Participant responded with:", None)
    TextComponent fix_cross_2
      color = $color_choice
      font = $font_choice
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text = +
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    MovieComponent new_neutral_2
      No audio = True
      backend = moviepy
      disabled = True
      forceEndRoutine = True
      movie [set every repeat] = $filename_thisN_neutral
      pos = [0, 0.225]
      size = [0.625, 0.5]
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 6
      units = height
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    ImageComponent new_neutral_2_jpg
      image [set every repeat] = $filename_thisN_neutral
      pos = [0, 0.225]
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 6.0
      texture resolution = 512
      units = height
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    KeyboardComponent response_training_2
      allowedKeys = 'left','right'
      correctAns = $CorrCat
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 6
      storeCorrect = True
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    TextComponent Stimulus_2
      color = $color_choice
      font = $font_choice
      letterHeight = 0.1
      pos = (0, -0.15)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 6
      text [set every repeat] = $str(int(stim_thisN))
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    TextComponent left_disp_2
      color = grey
      font = $font_choice
      letterHeight = 0.1
      pos = (-0.5, 0)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 6
      text [set every repeat] = $left_cat
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    TextComponent right_disp_2
      color = grey
      font = $font_choice
      letterHeight = 0.1
      pos = (0.5, 0)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 6
      text [set every repeat] = $right_cat
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  Routine feedback_2
    CodeComponent code_10
      Code Type = Py
      Begin Experiment:
        #Initialize color
        feedback = ''
        left_color = ''
        right_color = ''
      Begin Routine:
        #Feedback Zuweisung
        # to make feedback probabilistic: uncomment nested if clause
        # this will show happy for correct (congruent) in 80% of cases
        # and angry for correct (incongruent) in 20% of cases
        # probability can be changed by manipulating the sequence in p


        #if correct show happy video (with 0.8 probability)
        if (response_training.keys == 'left' and CorrCat == left_cat) or (response_training.keys == 'right' and CorrCat == right_cat):
        #    if choice([True, False], p = [0.8, 0.2])
            time_h = 6.0
            time_a = 0.0
        #    else:
        #        time_h = 0.0
        #        time_a = 6.0

        #if not correct show angry video (with 0.8 probability)
        else:
        #    if choice([True, False], p = [0.8, 0.2])
            time_h = 0.0
            time_a = 6.0
        #    else:
        #        time_h = 6.0
        #        time_a = 0.0

        #Set color of A/B on screen after response
        time_miss = 0
        if response_training.keys == 'left':
            left_color = 'black'
            right_color = 'grey'
        elif response_training.keys == 'right':
            left_color = 'grey'
            right_color = 'black'
        elif response_training.keys == None:
            left_color = 'grey'
            right_color = 'grey'
            time_miss = 6
            time_a = 0
            time_h = 0
        print(left_color, right_color)
    TextComponent feedback_miss2_2
      color = black
      letterHeight = 0.05
      pos = (0, 0.225)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time_miss
      text = BITTE RECHTZEITIG DRÜCKEN!
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    MovieComponent new_angry_3
      No audio = True
      backend = moviepy
      durationEstim = 6
      forceEndRoutine = False
      movie [set every repeat] = $filename_feedback_angry
      pos = [0, 0.225]
      size = [0.625, 0.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time_a
      units = height
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    MovieComponent new_happy_3
      backend = moviepy
      durationEstim = 6
      forceEndRoutine = False
      movie [set every repeat] = $filename_feedback_happy
      pos = [0, 0.225]
      size = [0.625, 0.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time_h
      units = height
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    TextComponent left_disp_fb_3
      color [set every repeat] = $left_color
      font = Lucida Console
      letterHeight = 0.1
      pos = (-0.5, 0)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
      text [set every repeat] = $left_cat
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    TextComponent right_disp_fb_3
      color [set every repeat] = $right_color
      font = Lucida Console
      letterHeight = 0.1
      pos = (0.5, 0)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
      text [set every repeat] = $right_cat
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    TextComponent Stimulus_fb_3
      color = black
      letterHeight = 0.1
      pos = (0, -0.15)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
      text [set every repeat] = $str(int(Stim))
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  Routine LatCounter
    CodeComponent code_2
      Code Type = Both
      End JS Routine:
        if(CycleCounter < 5){
        CycleCounter = CycleCounter + 1;
        } else {
            if(CycleCounter == 5) {
                CycleCounter = 0;
                console.log("CycleCounter reset to:" + CycleCounter)
            }
        }
  Routine BlockCounter
    CodeComponent code_3
      Code Type = Both
      End JS Routine:
        if(BlockCounter < 3){
        BlockCounter = BlockCounter + 1;
        } else {
            if(BlockCounter == 3) {
                BlockCounter = 0;
                console.log("BlockCounter reset to: " + BlockCounter)
            }
        }
  Routine feedback_prob
    CodeComponent code_12
      Code Type = Both
      Before JS Experiment:
        function weighted_random(items, weights) {
            var i;

            for (i = 0; i < weights.length; i++)
                weights[i] += weights[i - 1] || 0;

            var random = Math.random() * weights[weights.length - 1];

            for (i = 0; i < weights.length; i++)
                if (weights[i] > random)
                    break;

            return items[i];
        }

        var prob_fb_counter = 0;
      Begin Experiment:
        #Initialize color
        feedback = ''
        left_color = ''
        right_color = ''
      Begin JS Experiment:
        feedback = "";
        left_color = "";
        right_color = "";
      Begin JS Routine:
        console.log("prob_fb_counter", prob_fb_counter)

        console.log("Response:", response_training.keys, "CorrCat(Prob):", CorrCatProb, "left_cat:", left_cat, "right_cat", right_cat)


        if ([0,1,2].includes(prob_fb_counter) && left_cat == CorrCatProb) {
            prob_msg = "Richtige Antwort!";
        //    if(weighted_random([true, false], [0.8, 0.2])){
                //congruent
                console.log("Congruent image!")
                time_h = 6.0;
                time_a = 0.0;
        //    } else {
                //incongruent
        //        console.log("Incongruent image!")
        //        time_h = 0.0;
        //        time_a = 6.0;
        //    }
        } else {
            if ([0,1,2].includes(prob_fb_counter) && right_cat == CorrCatProb) {
            prob_msg = "Falsche Antwort!";
        //    if(weighted_random([true, false], [0.8, 0.2])){
        //        //congruent
                console.log("Congruent image!")
                time_h = 0.0;
                time_a = 6.0;
        //    } else {
                //incongruent
        //        console.log("Incongruent image!")
        //        time_h = 6.0;
        //        time_a = 0.0;
            }
        }
        if (prob_fb_counter == 3){
                prob_msg = "Richtige Antwort!";
                console.log("Incongruent image!")
                time_h = 0.0;
                time_a = 6.0;
        }


        time_miss = 0;
        if ((response_training.keys == "left")) {
            left_color = "white";
            right_color = "grey";
        } else {
            if ((response_training.keys == "right")) {
                left_color = "grey";
                right_color = "white";
            } else {
                if ((response_training.keys == null)) {
                    left_color = "grey";
                    right_color = "grey";
                    time_miss = 6;
                    time_a = 0;
                    time_h = 0;
                }
            }
        }
      Begin Routine:
        #Feedback Zuweisung
        # to make feedback probabilistic: uncomment nested if clause
        # this will show happy for correct (congruent) in 80% of cases
        # and angry for correct (incongruent) in 20% of cases
        # probability can be changed by manipulating the sequence in p


        #if correct show happy video (with 0.8 probability)
        if (response_training.keys == 'left' and CorrCat == left_cat) or (response_training.keys == 'right' and CorrCat == right_cat):
            prob_msg = "Richtige Antwort!"
            if choice([True, False], p = [0.8, 0.2]):
                time_h = 6.0
                time_a = 0.0
            else:
                time_h = 0.0
                time_a = 6.0

        #if not correct show angry video (with 0.8 probability)
        else:
            prob_msg = "Falsche Antwort!"
            if choice([True, False], p = [0.8, 0.2]):
                time_h = 0.0
                time_a = 6.0
            else:
                time_h = 6.0
                time_a = 0.0

        #Set color of A/B on screen after response
        time_miss = 0
        if response_training.keys == 'left':
            left_color = 'black'
            right_color = 'grey'
        elif response_training.keys == 'right':
            left_color = 'grey'
            right_color = 'black'
        elif response_training.keys == None:
            left_color = 'grey'
            right_color = 'grey'
            time_miss = 6
            time_a = 0
            time_h = 0
      End JS Routine:
        thisExp.addData("CorrCat", CorrCat);
        prob_fb_counter = prob_fb_counter + 1;

        if ((((response_training.keys == "left") && (CorrCatProb == left_cat)) || ((response_training.keys == "right") && (CorrCatProb == right_cat)))) {
            thisExp.addData("CorrectAns", "Yes");
            console.log("Correct Answer!");
        } else {
            thisExp.addData("CorrectAns", "No");
            console.log("Wrong Answer!");
        }
      End Routine:
        if (response_training.keys == 'left' and CorrCat == left_cat) or (response_training_2.keys == 'right' and CorrDict[stim_thisN] == right_cat):
            thisExp.addData ('CorrectAns', "Yes")
            print("Correct Answer!")
        else:
            thisExp.addData ('CorrectAns', "No")
            print("Wrong Answer!")
    TextComponent feedback_miss2_3
      color = $color_choice
      font = $font_choice
      letterHeight = 0.05
      pos = (0, 0.225)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time_miss
      text = PLEASE RESPOND FASTER!
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    MovieComponent new_angry_4
      No audio = True
      backend = moviepy
      durationEstim = 6
      forceEndRoutine = False
      movie [set every repeat] = $filename_feedback_angry
      pos = [0, 0.225]
      size = [0.5, 0.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time_a
      units = height
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    MovieComponent new_happy_4
      backend = moviepy
      durationEstim = 6
      forceEndRoutine = False
      movie [set every repeat] = $filename_feedback_happy
      pos = [0, 0.225]
      size = [0.5, 0.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time_h
      units = height
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    TextComponent left_disp_fb_4
      color [set every repeat] = $left_color
      font = $font_choice
      letterHeight = 0.1
      pos = (-0.5, 0)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
      text [set every repeat] = $left_cat
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    TextComponent right_disp_fb_4
      color [set every repeat] = $right_color
      font = $font_choice
      letterHeight = 0.1
      pos = (0.5, 0)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
      text [set every repeat] = $right_cat
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    TextComponent Stimulus_fb_4
      color = $color_choice
      font = $font_choice
      letterHeight = 0.1
      pos = (0, -0.15)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
      text [set every repeat] = $str(int(Stim))
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    TextComponent Prob_feedback
      color = $color_choice
      font = $font_choice
      letterHeight = 0.1
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text [set every repeat] = $prob_msg
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  Routine Prob_Intro
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Experiment:
        prob_msg = centerfy("Leider ist es so, dass ")
  Routine Alles_Klar_3
    CodeComponent Allesklarcode_4
      Code Type = Both
      Begin Experiment:
        Allesklar = centerfy('Beim letzten Durchgang haben Bild und Text nicht übereingestimmt!\n Dies wird im richtigen Experiment aber nur selten passieren.\n\n'
        'Den Text unten werden Sie im Folgenden nicht mehr angezeigt bekommen.\n\n'
        'Versuchen Sie einfach, so gut es geht, die richtige Antwort zu geben!\n')
    TextComponent Allesklartext
      color = $color_choice
      font = $font_choice
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      wrapWidth = 70
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      text:
        Did you notice? In the last pass, the picture and text didn't match!

        But this will rarely happen in the real experiment.

        You won't see the text below in the following.

        Just try to give the right answer as best you can!
    KeyboardComponent Allesklar_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Welcome
  Routine instr_train_s
  LoopInitiator training_social loopType="TrialHandler"
    Selected rows = 0:4
    conditionsFile = trainingtrials_social.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Stim', 99.0), ('filename_neutral', 'ADFES/Freigestellt/Neutral/F04-Neutral-Face Forward_freigestellt.mp4'), ('filename_feedback_happy', 'ADFES/Freigestellt/Joy/Used/F04-Joy-Face Forward_freigestellt.mp4'), ('filename_feedback_angry', 'ADFES/Freigestellt/Anger/F04-Anger-Face Forward_freigestellt.mp4'), ('CorrCatTrain', 'A')]),
      OrderedDict([('Stim', 38.0), ('filename_neutral', 'ADFES/Freigestellt/Neutral/M02-Neutral-Face Forward_freigestellt.mp4'), ('filename_feedback_happy', 'ADFES/Freigestellt/Joy/Used/M02-Joy-Face Forward_freigestellt.mp4'), ('filename_feedback_angry', 'ADFES/Freigestellt/Anger/M02-Anger-Face Forward_freigestellt.mp4'), ('CorrCatTrain', 'A')]),
      OrderedDict([('Stim', 91.0), ('filename_neutral', 'ADFES/Freigestellt/Neutral/F01-Neutral-Face Forward_freigestellt.mp4'), ('filename_feedback_happy', 'ADFES/Freigestellt/Joy/Used/F01-Joy-Face Forward_freigestellt.mp4'), ('filename_feedback_angry', 'ADFES/Freigestellt/Anger/F01-Anger-Face Forward_freigestellt.mp4'), ('CorrCatTrain', 'B')]),
      OrderedDict([('Stim', 38.0), ('filename_neutral', 'ADFES/Freigestellt/Neutral/M06-Neutral-Face Forward_freigestellt.mp4'), ('filename_feedback_happy', 'ADFES/Freigestellt/Joy/Used/M06-Joy-Face Forward_freigestellt.mp4'), ('filename_feedback_angry', 'ADFES/Freigestellt/Anger/M06-Anger-Face Forward_freigestellt.mp4'), ('CorrCatTrain', 'B')])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
    Routine trial
    Routine feedback_train
  LoopTerminator training_social
  Routine Alles_klar
  Routine instr_train_ns
  LoopInitiator training_nonsocial loopType="TrialHandler"
    Selected rows = 0:4
    conditionsFile = trainingtrials_nonsocial.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Stim', 98.0), ('filename_neutral', 'Mandalas_new/neutral/Mandala3_neutral.mp4'), ('filename_feedback_happy', 'Mandalas_new/happy/Mandala3_happy.mp4'), ('filename_feedback_angry', 'Mandalas_new/angry/Mandala3_angry.mp4'), ('CorrCatTrain', 'B')]),
      OrderedDict([('Stim', 53.0), ('filename_neutral', 'Mandalas_new/neutral/Mandala2_neutral.mp4'), ('filename_feedback_happy', 'Mandalas_new/happy/Mandala2_happy.mp4'), ('filename_feedback_angry', 'Mandalas_new/angry/Mandala2_angry.mp4'), ('CorrCatTrain', 'A')]),
      OrderedDict([('Stim', 43.0), ('filename_neutral', 'Mandalas_new/neutral/Mandala4_neutral.mp4'), ('filename_feedback_happy', 'Mandalas_new/happy/Mandala4_happy.mp4'), ('filename_feedback_angry', 'Mandalas_new/angry/Mandala4_angry.mp4'), ('CorrCatTrain', 'A')]),
      OrderedDict([('Stim', 39.0), ('filename_neutral', 'Mandalas_new/neutral/Mandala1_neutral.mp4'), ('filename_feedback_happy', 'Mandalas_new/happy/Mandala1_happy.mp4'), ('filename_feedback_angry', 'Mandalas_new/angry/Mandala1_angry.mp4'), ('CorrCatTrain', 'B')]),
      OrderedDict([('Stim', None), ('filename_neutral', None), ('filename_feedback_happy', None), ('filename_feedback_angry', None), ('CorrCatTrain', None)]),
      OrderedDict([('Stim', None), ('filename_neutral', None), ('filename_feedback_happy', None), ('filename_feedback_angry', None), ('CorrCatTrain', None)]),
      OrderedDict([('Stim', None), ('filename_neutral', None), ('filename_feedback_happy', None), ('filename_feedback_angry', None), ('CorrCatTrain', None)])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
    Routine trial
    Routine feedback_train
  LoopTerminator training_nonsocial
  Routine Alles_Klar_2
  LoopInitiator prob_fb loopType="TrialHandler"
    Selected rows = 0:4
    conditionsFile = trainingtrials_social_prob.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Stim', 99.0), ('filename_neutral', 'ADFES/Freigestellt/Neutral/F04-Neutral-Face Forward_freigestellt.mp4'), ('filename_feedback_happy', 'ADFES/Freigestellt/Joy/Used/F04-Joy-Face Forward_freigestellt.mp4'), ('filename_feedback_angry', 'ADFES/Freigestellt/Anger/F04-Anger-Face Forward_freigestellt.mp4'), ('CorrCat', 'A')]),
      OrderedDict([('Stim', 38.0), ('filename_neutral', 'ADFES/Freigestellt/Neutral/M02-Neutral-Face Forward_freigestellt.mp4'), ('filename_feedback_happy', 'ADFES/Freigestellt/Joy/Used/M02-Joy-Face Forward_freigestellt.mp4'), ('filename_feedback_angry', 'ADFES/Freigestellt/Anger/M02-Anger-Face Forward_freigestellt.mp4'), ('CorrCat', 'A')]),
      OrderedDict([('Stim', 91.0), ('filename_neutral', 'ADFES/Freigestellt/Neutral/F01-Neutral-Face Forward_freigestellt.mp4'), ('filename_feedback_happy', 'ADFES/Freigestellt/Joy/Used/F01-Joy-Face Forward_freigestellt.mp4'), ('filename_feedback_angry', 'ADFES/Freigestellt/Anger/F01-Anger-Face Forward_freigestellt.mp4'), ('CorrCat', 'B')]),
      OrderedDict([('Stim', 38.0), ('filename_neutral', 'ADFES/Freigestellt/Neutral/M06-Neutral-Face Forward_freigestellt.mp4'), ('filename_feedback_happy', 'ADFES/Freigestellt/Joy/Used/M06-Joy-Face Forward_freigestellt.mp4'), ('filename_feedback_angry', 'ADFES/Freigestellt/Anger/M06-Anger-Face Forward_freigestellt.mp4'), ('CorrCat', 'B')]),
      OrderedDict([('Stim', None), ('filename_neutral', None), ('filename_feedback_happy', None), ('filename_feedback_angry', None), ('CorrCat', None)])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
    Routine trial
    Routine feedback_prob
  LoopTerminator prob_fb
  Routine Alles_Klar_3
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 4
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    Routine BlockCode
    LoopInitiator cycles loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 6
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      Routine LateralizationByCycle
      LoopInitiator trials loopType="TrialHandler"
        loopType = sequential
        nReps = 4
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        Routine trial_2
        Routine feedback
        Routine Intertrial_Interval
      LoopTerminator trials
      Routine LatCounter
    LoopTerminator cycles
    Routine BlockCounter
  LoopTerminator blocks
  Routine Thanks
